def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit J_per_mmol as
    unit joule;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit nF as
    unit farad {pref: nano};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mmol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit pC as
    unit coulomb {pref: pico};
  enddef;
  def unit C_per_mmol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit kPa_per_s as
    unit kPa;
    unit second {expo: -1};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_mmol as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_fmol_1 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_1 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_1 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit fmol_per_s_2 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit kPa_per_s_1 as
    unit kPa;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s_3 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit kPa_per_s_2 as
    unit kPa;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_2 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_fmol_2 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_4 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_3 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit fmol_per_s_5 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit per_fmol_3 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_6 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit per_fmol_4 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_7 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_4 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_fmol_5 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_8 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_5 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_fmol_6 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_9 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s_10 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit kPa_per_s_3 as
    unit kPa;
    unit second {expo: -1};
  enddef;

  def comp parameters as
    var q_Na_muc_init_mucus: fmol {init: 10500, interface: public};
    var q_H2O_muc_init_mucus: fmol {init: 2765000, interface: public};
    var u_P_muc_init_mucus: kPa {init: 0, interface: public};
    var q_ATP_epi_init_cell: fmol {init: 750, interface: public};
    var q_ADP_epi_init_cell: fmol {init: 75, interface: public};
    var q_Pi_epi_init_cell: fmol {init: 75, interface: public};
    var q_Na_epi_init_cell: fmol {init: 750, interface: public};
    var q_K_epi_init_cell: fmol {init: 10500, interface: public};
    var q_H2O_epi_init_cell: fmol {init: 2766000, interface: public};
    var u_P_epi_init_cell: kPa {init: 0, interface: public};
    var q_1_init_ENaC: fmol {init: 0.001747, interface: public};
    var q_2_init_ENaC: fmol {init: 0.0024, interface: public};
    var q_3_init_ENaC: fmol {init: 0.00193, interface: public};
    var q_4_init_ENaC: fmol {init: 0.003876, interface: public};
    var q_open_init_ENaC: fmol {init: 3.40E-13, interface: public};
    var q_open_int_init_ENaC: fmol {init: 0.003685, interface: public};
    var K_1_ENaC: per_fmol_1 {init: 1.39551477, interface: public};
    var K_2_ENaC: per_fmol_1 {init: 1, interface: public};
    var K_3_ENaC: per_fmol_1 {init: 1, interface: public};
    var K_4_ENaC: per_fmol_1 {init: 0.5, interface: public};
    var K_open_ENaC: per_fmol_1 {init: 6488256446, interface: public};
    var K_open_int_ENaC: per_fmol_1 {init: 0.458179268, interface: public};
    var K_Na_i_ENaC: per_fmol_1 {init: 0.005989862, interface: public};
    var K_Na_o_ENaC: per_fmol_1 {init: 0.002966598, interface: public};
    var kappa_1_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_2_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_3_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_4_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_5_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_6_ENaC: fmol_per_s_1 {init: 0.059, interface: public};
    var q_e_m_init_membrane: pC {init: -1.7673, interface: public};
    var C_m_membrane: picoF {init: 353.46, interface: public};
    var q_AQ_AQ_apical: fmol {init: 0.16, interface: public};
    var K_AQ_AQ_apical: per_fmol_1 {init: 1, interface: public};
    var K_H2O_i_AQ_apical: per_fmol_1 {init: 1, interface: public};
    var K_H2O_o_AQ_apical: per_fmol_1 {init: 1, interface: public};
    var kappa_1_AQ_apical: fmol_per_s_1 {init: 1, interface: public};
    var q_AQ_AQ_baso: fmol {init: 0.16, interface: public};
    var K_AQ_AQ_baso: per_fmol_1 {init: 1, interface: public};
    var K_H2O_i_AQ_baso: per_fmol_1 {init: 1, interface: public};
    var K_H2O_o_AQ_baso: per_fmol_1 {init: 1, interface: public};
    var kappa_1_AQ_baso: fmol_per_s_1 {init: 1, interface: public};
    var z_1_NKE: dimensionless {init: 0.17, interface: public};
    var q_1_init_NKE: fmol {init: 3, interface: public};
    var q_2_init_NKE: fmol {init: 0, interface: public};
    var q_3_init_NKE: fmol {init: 0, interface: public};
    var q_4_init_NKE: fmol {init: 0, interface: public};
    var q_5_init_NKE: fmol {init: 0, interface: public};
    var q_6_init_NKE: fmol {init: 0, interface: public};
    var K_1_NKE: per_fmol_1 {init: 1, interface: public};
    var K_2_NKE: per_fmol_1 {init: 1, interface: public};
    var K_3_NKE: per_fmol_1 {init: 1, interface: public};
    var K_4_NKE: per_fmol_1 {init: 1, interface: public};
    var K_5_NKE: per_fmol_1 {init: 1, interface: public};
    var K_6_NKE: per_fmol_1 {init: 1, interface: public};
    var K_Nai_NKE: per_fmol_1 {init: 1, interface: public};
    var K_Nao_NKE: per_fmol_1 {init: 1, interface: public};
    var K_Ki_NKE: per_fmol_1 {init: 1, interface: public};
    var K_Ko_NKE: per_fmol_1 {init: 1, interface: public};
    var K_ADP_NKE: per_fmol_1 {init: 1, interface: public};
    var K_ATP_NKE: per_fmol_1 {init: 1, interface: public};
    var K_Pi_NKE: per_fmol_1 {init: 1, interface: public};
    var kappa_1_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_2_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_3_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_4_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_5_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_6_NKE: fmol_per_s_1 {init: 1, interface: public};
    var q_Kir_Kir: fmol {init: 1, interface: public};
    var K_K_i_Kir: per_fmol_1 {init: 1, interface: public};
    var K_K_o_Kir: per_fmol_1 {init: 1, interface: public};
    var K_Kir_Kir: per_fmol_1 {init: 1, interface: public};
    var kappa_1_Kir: fmol_per_s_1 {init: 1, interface: public};
    var q_Na_int_init_int_fluid: fmol {init: 10500, interface: public};
    var q_K_int_init_int_fluid: fmol {init: 750, interface: public};
    var q_H2O_int_init_int_fluid: fmol {init: 2765000, interface: public};
    var u_P_int_init_int_fluid: kPa {init: 0, interface: public};
  enddef;

  def comp parameters_global as
    var R: J_per_K_per_mmol {init: 0.008314, interface: public};
    var F: C_per_mmol_1 {init: 96.485, interface: public};
    var T: kelvin {init: 310, interface: public};
    var zNa: dimensionless {init: 1, interface: public};
    var zK: dimensionless {init: 1, interface: public};
    var V_w: L_per_mmol {init: 0.018, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp mucus_module as
    var t: second {interface: public};
    var q_H2O_muc_init: fmol {interface: public};
    var q_Na_muc_init: fmol {interface: public};
    var u_P_muc_init: kPa {interface: public};
    var q_H2O_muc: fmol {init: q_H2O_muc_init, interface: public};
    var q_Na_muc: fmol {init: q_Na_muc_init, interface: public};
    var u_P_muc: kPa {init: u_P_muc_init, interface: public};
    var v_ENaC_o: fmol_per_s_2 {interface: public};
    var v_AQ_o: fmol_per_s_2 {interface: public};
    ode(u_P_muc, t) = 0{kPa_per_s_1};
    ode(q_Na_muc, t) = v_ENaC_o;
    ode(q_H2O_muc, t) = v_AQ_o;
  enddef;

  def comp cell_module as
    var t: second {interface: public};
    var q_H2O_epi_init: fmol {interface: public};
    var q_Na_epi_init: fmol {interface: public};
    var q_K_epi_init: fmol {interface: public};
    var u_P_epi_init: kPa {interface: public};
    var q_ATP_epi_init: fmol {interface: public};
    var q_ADP_epi_init: fmol {interface: public};
    var q_Pi_epi_init: fmol {interface: public};
    var q_Na_epi: fmol {init: q_Na_epi_init, interface: public};
    var q_K_epi: fmol {init: q_K_epi_init, interface: public};
    var q_H2O_epi: fmol {init: q_H2O_epi_init, interface: public};
    var q_ATP_epi: fmol {init: q_ATP_epi_init, interface: public};
    var q_ADP_epi: fmol {init: q_ADP_epi_init, interface: public};
    var q_Pi_epi: fmol {init: q_Pi_epi_init, interface: public};
    var v_ENaC_i: fmol_per_s_3 {interface: public};
    var v_Kir_i: fmol_per_s_3 {interface: public};
    var v_AQ_api_i: fmol_per_s_3 {interface: public};
    var v_NKE_Na_i: fmol_per_s_3 {interface: public};
    var v_NKE_K_i: fmol_per_s_3 {interface: public};
    var v_AQ_bas_i: fmol_per_s_3 {interface: public};
    var u_P_epi: kPa {init: u_P_epi_init, interface: public};
    ode(u_P_epi, t) = 0{kPa_per_s_2};
    ode(q_Na_epi, t) = v_ENaC_i+3{dimensionless}*v_NKE_Na_i;
    ode(q_K_epi, t) = v_Kir_i+2{dimensionless}*v_NKE_K_i;
    ode(q_H2O_epi, t) = v_AQ_api_i+v_AQ_bas_i;
  enddef;

  def comp ENaC_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_2 {interface: public};
    var RT: J_per_mmol;
    var zNa: dimensionless {interface: public};
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_open_init: fmol {interface: public};
    var q_open_int_init: fmol {interface: public};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var q_open: fmol {init: q_open_init};
    var q_open_int: fmol {init: q_open_int_init};
    var q_Na_i: fmol {interface: public};
    var q_Na_o: fmol {interface: public};
    var K_1: per_fmol_2 {interface: public};
    var K_2: per_fmol_2 {interface: public};
    var K_3: per_fmol_2 {interface: public};
    var K_4: per_fmol_2 {interface: public};
    var K_open: per_fmol_2 {interface: public};
    var K_open_int: per_fmol_2 {interface: public};
    var K_Na_i: per_fmol_2 {interface: public};
    var K_Na_o: per_fmol_2 {interface: public};
    var kappa_1: fmol_per_s_4 {interface: public};
    var kappa_2: fmol_per_s_4 {interface: public};
    var kappa_3: fmol_per_s_4 {interface: public};
    var kappa_4: fmol_per_s_4 {interface: public};
    var kappa_5: fmol_per_s_4 {interface: public};
    var kappa_6: fmol_per_s_4 {interface: public};
    var u_1: J_per_mmol;
    var u_2: J_per_mmol;
    var u_3: J_per_mmol;
    var u_4: J_per_mmol;
    var u_open: J_per_mmol;
    var u_open_int: J_per_mmol;
    var u_Na_i: J_per_mmol;
    var u_Na_o: J_per_mmol;
    var u_e_m: volt {interface: public};
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    var u_Re_2_f: J_per_mmol;
    var u_Re_2_r: J_per_mmol;
    var u_Re_3_f: J_per_mmol;
    var u_Re_3_r: J_per_mmol;
    var u_Re_4_f: J_per_mmol;
    var u_Re_4_r: J_per_mmol;
    var u_Re_5_f: J_per_mmol;
    var u_Re_5_r: J_per_mmol;
    var u_Re_6_f: J_per_mmol;
    var u_Re_6_r: J_per_mmol;
    var v_1: fmol_per_s_4;
    var v_2: fmol_per_s_4;
    var v_3: fmol_per_s_4;
    var v_4: fmol_per_s_4;
    var v_5: fmol_per_s_4;
    var v_6: fmol_per_s_4;
    var v_q_Na_i: fmol_per_s_4 {interface: public};
    var v_q_Na_o: fmol_per_s_4 {interface: public};
    RT = R*T;
    u_1 = RT*ln(K_1*q_1);
    u_2 = RT*ln(K_2*q_2);
    u_3 = RT*ln(K_3*q_3);
    u_4 = RT*ln(K_4*q_4);
    u_open = RT*ln(K_open*q_open);
    u_open_int = RT*ln(K_open_int*q_open_int);
    u_Na_i = RT*ln(K_Na_i*q_Na_i);
    u_Na_o = RT*ln(K_Na_o*q_Na_o);
    u_Re_1_f = u_2;
    u_Re_1_r = u_1;
    u_Re_2_f = u_1+u_Na_o;
    u_Re_2_r = u_3;
    u_Re_3_f = u_3;
    u_Re_3_r = u_4;
    u_Re_4_f = u_4;
    u_Re_4_r = u_2+u_Na_o;
    u_Re_5_f = u_open+u_Na_o;
    u_Re_5_r = u_open_int;
    u_Re_6_f = u_open_int;
    u_Re_6_r = u_open+u_Na_i+zNa*F*u_e_m;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    v_2 = kappa_2*(exp(u_Re_2_f/RT)-exp(u_Re_2_r/RT));
    v_3 = kappa_3*(exp(u_Re_3_f/RT)-exp(u_Re_3_r/RT));
    v_4 = kappa_4*(exp(u_Re_4_f/RT)-exp(u_Re_4_r/RT));
    v_5 = kappa_5*(exp(u_Re_5_f/RT)-exp(u_Re_5_r/RT));
    v_6 = kappa_6*(exp(u_Re_6_f/RT)-exp(u_Re_6_r/RT));
    ode(q_1, t) = v_1-v_2;
    ode(q_2, t) = v_4-v_1;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_open, t) = v_1-v_3+v_6-v_5;
    ode(q_open_int, t) = v_5-v_6;
    // output fluxes
    v_q_Na_i = v_6;
    v_q_Na_o = v_4-v_2-v_5;
  enddef;

  def comp membrane_module as
    var t: second {interface: public};
    var C_m: picoF {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var z_1_NKE: dimensionless {interface: public};
    var z_2_NKE: dimensionless;
    var F: C_per_mmol_3 {interface: public};
    var q_e_m_init: pC {interface: public};
    var v_ENaC_i: fmol_per_s_5 {interface: public};
    var v_NKE_K_o: fmol_per_s_5 {interface: public};
    var v_NKE_Na_i: fmol_per_s_5 {interface: public};
    var v_Kir_i: fmol_per_s_5 {interface: public};
    var u_e_m: volt {interface: public};
    var q_e_m: pC {init: q_e_m_init};
    z_2_NKE = 1{dimensionless}-z_1_NKE;
    ode(q_e_m, t) = z_2_NKE*F*v_NKE_K_o+z_1_NKE*F*v_NKE_Na_i+zNa*F*v_ENaC_i+zK*F*v_Kir_i;
    u_e_m = q_e_m/C_m;
  enddef;

  def comp AQ_apical_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var RT: J_per_mmol;
    var V_w: L_per_mmol {interface: public};
    var q_AQ: fmol {interface: public};
    var q_H2O_i: fmol {interface: public};
    var q_H2O_o: fmol {interface: public};
    var K_AQ: per_fmol_3 {interface: public};
    var K_H2O_i: per_fmol_3 {interface: public};
    var K_H2O_o: per_fmol_3 {interface: public};
    var kappa_1: fmol_per_s_6 {interface: public};
    var u_AQ: J_per_mmol;
    var u_H2O_i: J_per_mmol;
    var u_H2O_o: J_per_mmol;
    var u_P_i: kPa {interface: public};
    var u_P_o: kPa {interface: public};
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    var v_1: fmol_per_s_6;
    var v_q_H2O_i: fmol_per_s_6 {interface: public};
    var v_q_H2O_o: fmol_per_s_6 {interface: public};
    RT = R*T;
    u_H2O_i = RT*ln(K_H2O_i*q_H2O_i);
    u_H2O_o = RT*ln(K_H2O_o*q_H2O_o);
    u_AQ = RT*ln(K_AQ*q_AQ);
    u_Re_1_f = u_H2O_o+u_AQ+u_P_o*V_w;
    u_Re_1_r = u_H2O_i+u_AQ+u_P_i*V_w;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    v_q_H2O_i = v_1;
    v_q_H2O_o = -v_1;
  enddef;

  def comp AQ_baso_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var RT: J_per_mmol;
    var V_w: L_per_mmol {interface: public};
    var q_AQ: fmol {interface: public};
    var q_H2O_i: fmol {interface: public};
    var q_H2O_o: fmol {interface: public};
    var K_AQ: per_fmol_4 {interface: public};
    var K_H2O_i: per_fmol_4 {interface: public};
    var K_H2O_o: per_fmol_4 {interface: public};
    var kappa_1: fmol_per_s_7 {interface: public};
    var u_AQ: J_per_mmol;
    var u_H2O_i: J_per_mmol;
    var u_H2O_o: J_per_mmol;
    var u_P_i: kPa {interface: public};
    var u_P_o: kPa {interface: public};
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    var v_1: fmol_per_s_7;
    var v_q_H2O_i: fmol_per_s_7 {interface: public};
    var v_q_H2O_o: fmol_per_s_7 {interface: public};
    RT = R*T;
    u_H2O_i = RT*ln(K_H2O_i*q_H2O_i);
    u_H2O_o = RT*ln(K_H2O_o*q_H2O_o);
    u_AQ = RT*ln(K_AQ*q_AQ);
    u_Re_1_f = u_H2O_o+u_AQ+u_P_o*V_w;
    u_Re_1_r = u_H2O_i+u_AQ+u_P_i*V_w;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    v_q_H2O_i = v_1;
    v_q_H2O_o = -v_1;
  enddef;

  def comp NKE_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_4 {interface: public};
    var RT: J_per_mmol;
    var z_1: dimensionless {interface: public};
    var z_2: dimensionless;
    var q_Na_o: fmol {interface: public};
    var q_Na_i: fmol {interface: public};
    var q_K_o: fmol {interface: public};
    var q_K_i: fmol {interface: public};
    var q_ATP: fmol {interface: public};
    var q_ADP: fmol {interface: public};
    var q_Pi: fmol {interface: public};
    var u_e: volt {interface: public};
    var e_1: milliV_per_kiloV;
    var e_2: milliV_per_kiloV;
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_5_init: fmol {interface: public};
    var q_6_init: fmol {interface: public};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var q_5: fmol {init: q_5_init};
    var q_6: fmol {init: q_6_init};
    var K_1: per_fmol_5 {interface: public};
    var K_2: per_fmol_5 {interface: public};
    var K_3: per_fmol_5 {interface: public};
    var K_4: per_fmol_5 {interface: public};
    var K_5: per_fmol_5 {interface: public};
    var K_6: per_fmol_5 {interface: public};
    var K_Ko: per_fmol_5 {interface: public};
    var K_Ki: per_fmol_5 {interface: public};
    var K_ADP: per_fmol_5 {interface: public};
    var K_ATP: per_fmol_5 {interface: public};
    var K_Nao: per_fmol_5 {interface: public};
    var K_Nai: per_fmol_5 {interface: public};
    var K_Pi: per_fmol_5 {interface: public};
    var kappa_1: fmol_per_s_8 {interface: public};
    var kappa_2: fmol_per_s_8 {interface: public};
    var kappa_3: fmol_per_s_8 {interface: public};
    var kappa_4: fmol_per_s_8 {interface: public};
    var kappa_5: fmol_per_s_8 {interface: public};
    var kappa_6: fmol_per_s_8 {interface: public};
    var Q_1: dimensionless;
    var Q_2: dimensionless;
    var Q_3: dimensionless;
    var Q_4: dimensionless;
    var Q_5: dimensionless;
    var Q_6: dimensionless;
    var Q_Na_o: dimensionless;
    var Q_Na_i: dimensionless;
    var Q_K_o: dimensionless;
    var Q_K_i: dimensionless;
    var Q_ATP: dimensionless;
    var Q_ADP: dimensionless;
    var Q_Pi: dimensionless;
    var v_1: fmol_per_s_8;
    var v_2: fmol_per_s_8;
    var v_3: fmol_per_s_8;
    var v_4: fmol_per_s_8;
    var v_5: fmol_per_s_8;
    var v_6: fmol_per_s_8;
    var v_q_Na_i: fmol_per_s_8 {interface: public};
    var v_q_Na_o: fmol_per_s_8 {interface: public};
    var v_q_K_i: fmol_per_s_8 {interface: public};
    var v_q_K_o: fmol_per_s_8 {interface: public};
    z_2 = 1{dimensionless}-z_1;
    RT = R*T;
    e_1 = exp(z_1*F*u_e/RT);
    e_2 = exp(z_2*F*u_e/RT);
    Q_1 = K_1*q_1;
    Q_2 = K_2*q_2;
    Q_3 = K_3*q_3;
    Q_4 = K_4*q_4;
    Q_5 = K_5*q_5;
    Q_6 = K_6*q_6;
    Q_Na_o = K_Nao*q_Na_o;
    Q_Na_i = K_Nai*q_Na_i;
    Q_K_o = K_Ko*q_K_o;
    Q_K_i = K_Ki*q_K_i;
    Q_ATP = K_ATP*q_ATP;
    Q_ADP = K_ADP*q_ADP;
    Q_Pi = K_Pi*q_Pi;
    v_1 = kappa_1*(Q_1*pow(Q_Na_i, 3{milliV_per_kiloV})*Q_ATP-Q_2);
    v_2 = kappa_2*(Q_2-Q_3*Q_ADP);
    v_3 = kappa_3*(Q_3-Q_4*pow(Q_Na_o, 3{milliV_per_kiloV})*e_1);
    v_4 = kappa_4*(Q_4*sqr(Q_K_o)-Q_5);
    v_5 = kappa_5*(Q_5-Q_6*Q_Pi);
    v_6 = kappa_6*(Q_6-Q_1*sqr(Q_K_i)*e_2);
    // conservation equations
    ode(q_1, t) = v_6-v_1;
    ode(q_2, t) = v_1-v_2;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_5, t) = v_4-v_5;
    ode(q_6, t) = v_5-v_6;
    v_q_Na_o = v_1;
    v_q_Na_i = v_3;
    v_q_K_o = v_6;
    v_q_K_i = v_4;
  enddef;

  def comp Kir_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_5 {interface: public};
    var zK: dimensionless {interface: public};
    var RT: J_per_mmol;
    var q_Kir: fmol {interface: public};
    var q_K_i: fmol {interface: public};
    var q_K_o: fmol {interface: public};
    var K_Kir: per_fmol_6 {interface: public};
    var K_K_i: per_fmol_6 {interface: public};
    var K_K_o: per_fmol_6 {interface: public};
    var kappa_1: fmol_per_s_9 {interface: public};
    var u_Kir: J_per_mmol;
    var u_K_i: J_per_mmol;
    var u_K_o: J_per_mmol;
    var u_e_m: volt {interface: public};
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    var v_1: fmol_per_s_9;
    var v_q_K_i: fmol_per_s_9 {interface: public};
    var v_q_K_o: fmol_per_s_9 {interface: public};
    RT = R*T;
    u_K_i = RT*ln(K_K_i*q_K_i);
    u_K_o = RT*ln(K_K_o*q_K_o);
    u_Kir = RT*ln(K_Kir*q_Kir);
    u_Re_1_f = u_K_i+u_Kir+zK*F*u_e_m;
    u_Re_1_r = u_K_o+u_Kir;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    v_q_K_i = -v_1;
    v_q_K_o = v_1;
  enddef;

  def comp int_fluid_module as
    var t: second {interface: public};
    var q_H2O_int_init: fmol {interface: public};
    var q_Na_int_init: fmol {interface: public};
    var q_K_int_init: fmol {interface: public};
    var u_P_int_init: kPa {interface: public};
    var q_K_int: fmol {init: q_K_int_init, interface: public};
    var q_Na_int: fmol {init: q_Na_int_init, interface: public};
    var q_H2O_int: fmol {init: q_H2O_int_init, interface: public};
    var v_NKE_K_o: fmol_per_s_10 {interface: public};
    var v_NKE_Na_o: fmol_per_s_10 {interface: public};
    var v_Kir_o: fmol_per_s_10 {interface: public};
    var v_AQ_o: fmol_per_s_10 {interface: public};
    var u_P_int: kPa {init: u_P_int_init, interface: public};
    ode(u_P_int, t) = 0{kPa_per_s_3};
    ode(q_Na_int, t) = 3{dimensionless}*v_NKE_Na_o;
    ode(q_K_int, t) = 2{dimensionless}*v_NKE_K_o+v_Kir_o;
    ode(q_H2O_int, t) = v_AQ_o;
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp sum_blood_volume as
  enddef;

  def comp mucus as
    var q_Na_muc_init: fmol {interface: public};
    var q_Na_muc: fmol {interface: public};
    var q_H2O_muc_init: fmol {interface: public};
    var q_H2O_muc: fmol {interface: public};
    var u_P_muc_init: kPa {interface: public};
    var u_P_muc: kPa {interface: public};
  enddef;

  def comp cell as
    var q_ATP_epi_init: fmol {interface: public};
    var q_ADP_epi_init: fmol {interface: public};
    var q_Pi_epi_init: fmol {interface: public};
    var q_Na_epi_init: fmol {interface: public};
    var q_Na_epi: fmol {interface: public};
    var q_K_epi_init: fmol {interface: public};
    var q_K_epi: fmol {interface: public};
    var q_H2O_epi_init: fmol {interface: public};
    var q_H2O_epi: fmol {interface: public};
    var u_P_epi_init: kPa {interface: public};
    var u_P_epi: kPa {interface: public};
  enddef;

  def comp ENaC as
    var R: J_per_K_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var zNa: dimensionless {interface: public};
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_open_init: fmol {interface: public};
    var q_open_int_init: fmol {interface: public};
    var v_q_Na_i: fmol_per_s {interface: public};
    var v_q_Na_o: fmol_per_s {interface: public};
    var K_1: per_fmol {interface: public};
    var K_2: per_fmol {interface: public};
    var K_3: per_fmol {interface: public};
    var K_4: per_fmol {interface: public};
    var K_open: per_fmol {interface: public};
    var K_open_int: per_fmol {interface: public};
    var K_Na_i: per_fmol {interface: public};
    var K_Na_o: per_fmol {interface: public};
    var kappa_1: fmol_per_s {interface: public};
    var kappa_2: fmol_per_s {interface: public};
    var kappa_3: fmol_per_s {interface: public};
    var kappa_4: fmol_per_s {interface: public};
    var kappa_5: fmol_per_s {interface: public};
    var kappa_6: fmol_per_s {interface: public};
  enddef;

  def comp membrane as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var F: C_per_mmol {interface: public};
    var q_e_m_init: pC {interface: public};
    var C_m: picoFarad {interface: public};
    var u_e_m: volt {interface: public};
  enddef;

  def comp AQ_apical as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var V_w: L_per_mmol {interface: public};
    var q_AQ: fmol {interface: public};
    var K_AQ: per_fmol {interface: public};
    var K_H2O_i: per_fmol {interface: public};
    var K_H2O_o: per_fmol {interface: public};
    var kappa_1: fmol_per_s {interface: public};
  enddef;

  def comp AQ_baso as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var V_w: L_per_mmol {interface: public};
    var q_AQ: fmol {interface: public};
    var K_AQ: per_fmol {interface: public};
    var K_H2O_i: per_fmol {interface: public};
    var K_H2O_o: per_fmol {interface: public};
    var kappa_1: fmol_per_s {interface: public};
  enddef;

  def comp NKE as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var z_1: dimensionless {interface: public};
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_5_init: fmol {interface: public};
    var q_6_init: fmol {interface: public};
    var v_q_Na_i: fmol_per_s {interface: public};
    var v_q_Na_o: fmol_per_s {interface: public};
    var v_q_K_i: fmol_per_s {interface: public};
    var v_q_K_o: fmol_per_s {interface: public};
    var K_1: per_fmol {interface: public};
    var K_2: per_fmol {interface: public};
    var K_3: per_fmol {interface: public};
    var K_4: per_fmol {interface: public};
    var K_5: per_fmol {interface: public};
    var K_6: per_fmol {interface: public};
    var K_Nai: per_fmol {interface: public};
    var K_Nao: per_fmol {interface: public};
    var K_Ki: per_fmol {interface: public};
    var K_Ko: per_fmol {interface: public};
    var K_ADP: per_fmol {interface: public};
    var K_ATP: per_fmol {interface: public};
    var K_Pi: per_fmol {interface: public};
    var kappa_1: fmol_per_s {interface: public};
    var kappa_2: fmol_per_s {interface: public};
    var kappa_3: fmol_per_s {interface: public};
    var kappa_4: fmol_per_s {interface: public};
    var kappa_5: fmol_per_s {interface: public};
    var kappa_6: fmol_per_s {interface: public};
  enddef;

  def comp Kir as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var zK: dimensionless {interface: public};
    var q_Kir: fmol {interface: public};
    var v_q_K_o: fmol_per_s {interface: public};
    var v_q_K_i: fmol_per_s {interface: public};
    var K_K_i: per_fmol {interface: public};
    var K_K_o: per_fmol {interface: public};
    var K_Kir: per_fmol {interface: public};
    var kappa_1: fmol_per_s {interface: public};
  enddef;

  def comp int_fluid as
    var q_Na_int_init: fmol {interface: public};
    var q_Na_int: fmol {interface: public};
    var q_K_int_init: fmol {interface: public};
    var q_K_int: fmol {interface: public};
    var q_H2O_int_init: fmol {interface: public};
    var q_H2O_int: fmol {interface: public};
    var u_P_int_init: kPa {interface: public};
    var u_P_int: kPa {interface: public};
  enddef;

  def comp global as
    var R: J_per_K_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var V_w: L_per_mmol {interface: public};
  enddef;
  def map between parameters and mucus_module for
    vars q_Na_muc_init_mucus and q_Na_muc_init;
    vars q_H2O_muc_init_mucus and q_H2O_muc_init;
    vars u_P_muc_init_mucus and u_P_muc_init;
  enddef;
  def map between parameters and cell_module for
    vars q_ATP_epi_init_cell and q_ATP_epi_init;
    vars q_ADP_epi_init_cell and q_ADP_epi_init;
    vars q_Pi_epi_init_cell and q_Pi_epi_init;
    vars q_Na_epi_init_cell and q_Na_epi_init;
    vars q_K_epi_init_cell and q_K_epi_init;
    vars q_H2O_epi_init_cell and q_H2O_epi_init;
    vars u_P_epi_init_cell and u_P_epi_init;
  enddef;
  def map between parameters and ENaC_module for
    vars q_1_init_ENaC and q_1_init;
    vars q_2_init_ENaC and q_2_init;
    vars q_3_init_ENaC and q_3_init;
    vars q_4_init_ENaC and q_4_init;
    vars q_open_init_ENaC and q_open_init;
    vars q_open_int_init_ENaC and q_open_int_init;
    vars K_1_ENaC and K_1;
    vars K_2_ENaC and K_2;
    vars K_3_ENaC and K_3;
    vars K_4_ENaC and K_4;
    vars K_open_ENaC and K_open;
    vars K_open_int_ENaC and K_open_int;
    vars K_Na_i_ENaC and K_Na_i;
    vars K_Na_o_ENaC and K_Na_o;
    vars kappa_1_ENaC and kappa_1;
    vars kappa_2_ENaC and kappa_2;
    vars kappa_3_ENaC and kappa_3;
    vars kappa_4_ENaC and kappa_4;
    vars kappa_5_ENaC and kappa_5;
    vars kappa_6_ENaC and kappa_6;
  enddef;
  def map between parameters and membrane_module for
    vars q_e_m_init_membrane and q_e_m_init;
    vars C_m_membrane and C_m;
  enddef;
  def map between parameters and AQ_apical_module for
    vars q_AQ_AQ_apical and q_AQ;
    vars K_AQ_AQ_apical and K_AQ;
    vars K_H2O_i_AQ_apical and K_H2O_i;
    vars K_H2O_o_AQ_apical and K_H2O_o;
    vars kappa_1_AQ_apical and kappa_1;
  enddef;
  def map between parameters and AQ_baso_module for
    vars q_AQ_AQ_baso and q_AQ;
    vars K_AQ_AQ_baso and K_AQ;
    vars K_H2O_i_AQ_baso and K_H2O_i;
    vars K_H2O_o_AQ_baso and K_H2O_o;
    vars kappa_1_AQ_baso and kappa_1;
  enddef;
  def map between parameters and NKE_module for
    vars z_1_NKE and z_1;
    vars q_1_init_NKE and q_1_init;
    vars q_2_init_NKE and q_2_init;
    vars q_3_init_NKE and q_3_init;
    vars q_4_init_NKE and q_4_init;
    vars q_5_init_NKE and q_5_init;
    vars q_6_init_NKE and q_6_init;
    vars K_1_NKE and K_1;
    vars K_2_NKE and K_2;
    vars K_3_NKE and K_3;
    vars K_4_NKE and K_4;
    vars K_5_NKE and K_5;
    vars K_6_NKE and K_6;
    vars K_Nai_NKE and K_Nai;
    vars K_Nao_NKE and K_Nao;
    vars K_Ki_NKE and K_Ki;
    vars K_Ko_NKE and K_Ko;
    vars K_ADP_NKE and K_ADP;
    vars K_ATP_NKE and K_ATP;
    vars K_Pi_NKE and K_Pi;
    vars kappa_1_NKE and kappa_1;
    vars kappa_2_NKE and kappa_2;
    vars kappa_3_NKE and kappa_3;
    vars kappa_4_NKE and kappa_4;
    vars kappa_5_NKE and kappa_5;
    vars kappa_6_NKE and kappa_6;
  enddef;
  def map between parameters and Kir_module for
    vars q_Kir_Kir and q_Kir;
    vars K_K_i_Kir and K_K_i;
    vars K_K_o_Kir and K_K_o;
    vars K_Kir_Kir and K_Kir;
    vars kappa_1_Kir and kappa_1;
  enddef;
  def map between parameters and int_fluid_module for
    vars q_Na_int_init_int_fluid and q_Na_int_init;
    vars q_K_int_init_int_fluid and q_K_int_init;
    vars q_H2O_int_init_int_fluid and q_H2O_int_init;
    vars u_P_int_init_int_fluid and u_P_int_init;
  enddef;
  def map between parameters_global and global for
    vars R and R;
    vars F and F;
    vars T and T;
    vars zNa and zNa;
    vars zK and zK;
    vars V_w and V_w;
  enddef;
  def map between parameters_global and ENaC_module for
    vars R and R;
    vars F and F;
    vars T and T;
    vars zNa and zNa;
  enddef;
  def map between parameters_global and AQ_apical_module for
    vars R and R;
    vars T and T;
    vars V_w and V_w;
  enddef;
  def map between parameters_global and AQ_baso_module for
    vars R and R;
    vars T and T;
    vars V_w and V_w;
  enddef;
  def map between parameters_global and NKE_module for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between parameters_global and Kir_module for
    vars R and R;
    vars F and F;
    vars T and T;
    vars zK and zK;
  enddef;
  def map between parameters_global and membrane_module for
    vars F and F;
    vars zNa and zNa;
    vars zK and zK;
  enddef;
  def map between environment and mucus_module for
    vars time and t;
  enddef;
  def map between environment and cell_module for
    vars time and t;
  enddef;
  def map between environment and ENaC_module for
    vars time and t;
  enddef;
  def map between environment and membrane_module for
    vars time and t;
  enddef;
  def map between environment and AQ_apical_module for
    vars time and t;
  enddef;
  def map between environment and AQ_baso_module for
    vars time and t;
  enddef;
  def map between environment and NKE_module for
    vars time and t;
  enddef;
  def map between environment and Kir_module for
    vars time and t;
  enddef;
  def map between environment and int_fluid_module for
    vars time and t;
  enddef;
  def map between mucus_module and mucus for
    vars q_H2O_muc_init and q_H2O_muc_init;
    vars q_Na_muc_init and q_Na_muc_init;
    vars u_P_muc_init and u_P_muc_init;
    vars q_H2O_muc and q_H2O_muc;
    vars q_Na_muc and q_Na_muc;
    vars u_P_muc and u_P_muc;
  enddef;
  def map between mucus_module and AQ_apical_module for
    vars q_H2O_muc and q_H2O_o;
    vars u_P_muc and u_P_o;
    vars v_AQ_o and v_q_H2O_o;
  enddef;
  def map between mucus_module and ENaC_module for
    vars q_Na_muc and q_Na_o;
    vars v_ENaC_o and v_q_Na_o;
  enddef;
  def map between cell_module and cell for
    vars q_H2O_epi_init and q_H2O_epi_init;
    vars q_Na_epi_init and q_Na_epi_init;
    vars q_K_epi_init and q_K_epi_init;
    vars u_P_epi_init and u_P_epi_init;
    vars q_ATP_epi_init and q_ATP_epi_init;
    vars q_ADP_epi_init and q_ADP_epi_init;
    vars q_Pi_epi_init and q_Pi_epi_init;
    vars q_Na_epi and q_Na_epi;
    vars q_K_epi and q_K_epi;
    vars q_H2O_epi and q_H2O_epi;
    vars u_P_epi and u_P_epi;
  enddef;
  def map between cell_module and ENaC_module for
    vars q_Na_epi and q_Na_i;
    vars v_ENaC_i and v_q_Na_i;
  enddef;
  def map between cell_module and NKE_module for
    vars q_Na_epi and q_Na_i;
    vars q_K_epi and q_K_i;
    vars q_ATP_epi and q_ATP;
    vars q_ADP_epi and q_ADP;
    vars q_Pi_epi and q_Pi;
    vars v_NKE_Na_i and v_q_Na_i;
    vars v_NKE_K_i and v_q_K_i;
  enddef;
  def map between cell_module and Kir_module for
    vars q_K_epi and q_K_i;
    vars v_Kir_i and v_q_K_i;
  enddef;
  def map between cell_module and AQ_apical_module for
    vars q_H2O_epi and q_H2O_i;
    vars v_AQ_api_i and v_q_H2O_i;
    vars u_P_epi and u_P_i;
  enddef;
  def map between cell_module and AQ_baso_module for
    vars q_H2O_epi and q_H2O_i;
    vars v_AQ_bas_i and v_q_H2O_i;
    vars u_P_epi and u_P_i;
  enddef;
  def map between ENaC_module and ENaC for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zNa and zNa;
    vars q_1_init and q_1_init;
    vars q_2_init and q_2_init;
    vars q_3_init and q_3_init;
    vars q_4_init and q_4_init;
    vars q_open_init and q_open_init;
    vars q_open_int_init and q_open_int_init;
    vars K_1 and K_1;
    vars K_2 and K_2;
    vars K_3 and K_3;
    vars K_4 and K_4;
    vars K_open and K_open;
    vars K_open_int and K_open_int;
    vars K_Na_i and K_Na_i;
    vars K_Na_o and K_Na_o;
    vars kappa_1 and kappa_1;
    vars kappa_2 and kappa_2;
    vars kappa_3 and kappa_3;
    vars kappa_4 and kappa_4;
    vars kappa_5 and kappa_5;
    vars kappa_6 and kappa_6;
    vars v_q_Na_i and v_q_Na_i;
    vars v_q_Na_o and v_q_Na_o;
  enddef;
  def map between ENaC_module and membrane_module for
    vars u_e_m and u_e_m;
    vars v_q_Na_i and v_ENaC_i;
  enddef;
  def map between membrane_module and membrane for
    vars C_m and C_m;
    vars zNa and zNa;
    vars zK and zK;
    vars F and F;
    vars q_e_m_init and q_e_m_init;
    vars u_e_m and u_e_m;
  enddef;
  def map between membrane_module and NKE_module for
    vars z_1_NKE and z_1;
    vars v_NKE_K_o and v_q_K_o;
    vars v_NKE_Na_i and v_q_Na_i;
    vars u_e_m and u_e;
  enddef;
  def map between membrane_module and Kir_module for
    vars v_Kir_i and v_q_K_i;
    vars u_e_m and u_e_m;
  enddef;
  def map between AQ_apical_module and AQ_apical for
    vars R and R;
    vars T and T;
    vars V_w and V_w;
    vars q_AQ and q_AQ;
    vars K_AQ and K_AQ;
    vars K_H2O_i and K_H2O_i;
    vars K_H2O_o and K_H2O_o;
    vars kappa_1 and kappa_1;
  enddef;
  def map between AQ_baso_module and AQ_baso for
    vars R and R;
    vars T and T;
    vars V_w and V_w;
    vars q_AQ and q_AQ;
    vars K_AQ and K_AQ;
    vars K_H2O_i and K_H2O_i;
    vars K_H2O_o and K_H2O_o;
    vars kappa_1 and kappa_1;
  enddef;
  def map between AQ_baso_module and int_fluid_module for
    vars q_H2O_o and q_H2O_int;
    vars u_P_o and u_P_int;
    vars v_q_H2O_o and v_AQ_o;
  enddef;
  def map between NKE_module and NKE for
    vars R and R;
    vars T and T;
    vars F and F;
    vars z_1 and z_1;
    vars q_1_init and q_1_init;
    vars q_2_init and q_2_init;
    vars q_3_init and q_3_init;
    vars q_4_init and q_4_init;
    vars q_5_init and q_5_init;
    vars q_6_init and q_6_init;
    vars K_1 and K_1;
    vars K_2 and K_2;
    vars K_3 and K_3;
    vars K_4 and K_4;
    vars K_5 and K_5;
    vars K_6 and K_6;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars K_ADP and K_ADP;
    vars K_ATP and K_ATP;
    vars K_Nao and K_Nao;
    vars K_Nai and K_Nai;
    vars K_Pi and K_Pi;
    vars kappa_1 and kappa_1;
    vars kappa_2 and kappa_2;
    vars kappa_3 and kappa_3;
    vars kappa_4 and kappa_4;
    vars kappa_5 and kappa_5;
    vars kappa_6 and kappa_6;
    vars v_q_Na_i and v_q_Na_i;
    vars v_q_Na_o and v_q_Na_o;
    vars v_q_K_i and v_q_K_i;
    vars v_q_K_o and v_q_K_o;
  enddef;
  def map between NKE_module and int_fluid_module for
    vars q_Na_o and q_Na_int;
    vars q_K_o and q_K_int;
    vars v_q_Na_o and v_NKE_Na_o;
    vars v_q_K_o and v_NKE_K_o;
  enddef;
  def map between Kir_module and Kir for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zK and zK;
    vars q_Kir and q_Kir;
    vars K_Kir and K_Kir;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars kappa_1 and kappa_1;
    vars v_q_K_i and v_q_K_i;
    vars v_q_K_o and v_q_K_o;
  enddef;
  def map between Kir_module and int_fluid_module for
    vars q_K_o and q_K_int;
    vars v_q_K_o and v_Kir_o;
  enddef;
  def map between int_fluid_module and int_fluid for
    vars q_H2O_int_init and q_H2O_int_init;
    vars q_Na_int_init and q_Na_int_init;
    vars q_K_int_init and q_K_int_init;
    vars u_P_int_init and u_P_int_init;
    vars q_K_int and q_K_int;
    vars q_Na_int and q_Na_int;
    vars q_H2O_int and q_H2O_int;
    vars u_P_int and u_P_int;
  enddef;
enddef;
