def model modules as
  // ------------module_units------------//
  def import using "colon_FTU_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit J_per_mmol using unit J_per_mmol;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit uF using unit uF;
    unit nF using unit nF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mmol using unit J_per_K_per_mmol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit pC using unit pC;
    unit C_per_mmol using unit C_per_mmol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit kPa_per_s using unit kPa_per_s;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
    unit L_per_mmol using unit L_per_mmol;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp membrane as
    var t: second {pub: in};
    // material parameters
    var C_m: picoFarad {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var z_1_NKE: dimensionless {pub: in};
    var z_2_NKE: dimensionless;
    var F: C_per_mmol {pub: in};
    z_2_NKE = 1{dimensionless}-z_1_NKE;
    // initial values
    var q_e_m_init: pC {pub: in};
    // flows
    var v_ENaC_i: fmol_per_s {pub: in};
    var v_NKE_K_o: fmol_per_s {pub: in};
    var v_NKE_Na_i: fmol_per_s {pub: in};
    var v_Kir_i: fmol_per_s {pub: in};
    // state variables
    var u_e_m: volt {pub: out};
    var q_e_m: pC {init: q_e_m_init};
    // constitutive equations
    ode(q_e_m, t) = z_2_NKE*F*v_NKE_K_o+z_1_NKE*F*v_NKE_Na_i+zNa*F*v_ENaC_i+zK*F*v_Kir_i;
    u_e_m = q_e_m/C_m;
  enddef;
  // #########################################################
  // ################## Compartments #########################
  // #########################################################

  def comp mucus as
    var t: second {pub: in};
    // initial values
    var q_H2O_muc_init: fmol {pub: in};
    var q_Na_muc_init: fmol {pub: in};
    var u_P_muc_init: kPa {pub: in};
    // quantities
    var q_H2O_muc: fmol {init: q_H2O_muc_init, pub: out};
    var q_Na_muc: fmol {init: q_Na_muc_init, pub: out};
    // efforts
    var u_P_muc: kPa {init: u_P_muc_init, pub: out};
    // flows
    var v_ENaC_o: fmol_per_s {pub: in};
    var v_AQ_o: fmol_per_s {pub: in};
    // conservation equations
    ode(u_P_muc, t) = 0{kPa_per_s};
    ode(q_Na_muc, t) = v_ENaC_o;
    ode(q_H2O_muc, t) = v_AQ_o;
  enddef;

  def comp colonocyte as
    var t: second {pub: in};
    // initial values
    var q_H2O_epi_init: fmol {pub: in};
    var q_Na_epi_init: fmol {pub: in};
    var q_K_epi_init: fmol {pub: in};
    var u_P_epi_init: kPa {pub: in};
    var q_ATP_epi_init: fmol {pub: in};
    var q_ADP_epi_init: fmol {pub: in};
    var q_Pi_epi_init: fmol {pub: in};
    // quantities
    var q_Na_epi: fmol {init: q_Na_epi_init, pub: out};
    var q_K_epi: fmol {init: q_K_epi_init, pub: out};
    var q_H2O_epi: fmol {init: q_H2O_epi_init, pub: out};
    var q_ATP_epi: fmol {init: q_ATP_epi_init, pub: out};
    var q_ADP_epi: fmol {init: q_ADP_epi_init, pub: out};
    var q_Pi_epi: fmol {init: q_Pi_epi_init, pub: out};
    // flows
    var v_ENaC_i: fmol_per_s {pub: in};
    var v_Kir_i: fmol_per_s {pub: in};
    var v_AQ_api_i: fmol_per_s {pub: in};
    var v_NKE_Na_i: fmol_per_s {pub: in};
    var v_NKE_K_i: fmol_per_s {pub: in};
    var v_AQ_bas_i: fmol_per_s {pub: in};
    // efforts
    var u_P_epi: kPa {init: u_P_epi_init, pub: out};
    // conservation equations
    ode(u_P_epi, t) = 0{kPa_per_s};
    ode(q_Na_epi, t) = v_ENaC_i+3{dimensionless}*v_NKE_Na_i;
    ode(q_K_epi, t) = v_Kir_i+2{dimensionless}*v_NKE_K_i;
    ode(q_H2O_epi, t) = v_AQ_api_i+v_AQ_bas_i;
  enddef;

  def comp interstitial_fluid as
    var t: second {pub: in};
    // initial values
    var q_H2O_int_init: fmol {pub: in};
    var q_Na_int_init: fmol {pub: in};
    var q_K_int_init: fmol {pub: in};
    var u_P_int_init: kPa {pub: in};
    // quantities
    var q_K_int: fmol {init: q_K_int_init, pub: out};
    var q_Na_int: fmol {init: q_Na_int_init, pub: out};
    var q_H2O_int: fmol {init: q_H2O_int_init, pub: out};
    // flows
    var v_NKE_K_o: fmol_per_s {pub: in};
    var v_NKE_Na_o: fmol_per_s {pub: in};
    var v_Kir_o: fmol_per_s {pub: in};
    var v_AQ_o: fmol_per_s {pub: in};
    // efforts
    var u_P_int: kPa {init: u_P_int_init, pub: out};
    // conservation equations
    ode(u_P_int, t) = 0{kPa_per_s};
    ode(q_Na_int, t) = 3{dimensionless}*v_NKE_Na_o;
    ode(q_K_int, t) = 2{dimensionless}*v_NKE_K_o+v_Kir_o;
    ode(q_H2O_int, t) = v_AQ_o;
  enddef;
  // #########################################################
  // #################### Proteins ###########################
  // #########################################################

  def comp ENaC as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var zNa: dimensionless {pub: in};
    RT = R*T;
    // Quantities
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_open_init: fmol {pub: in};
    var q_open_int_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var q_open: fmol {init: q_open_init};
    var q_open_int: fmol {init: q_open_int_init};
    var q_Na_i: fmol {pub: in};
    var q_Na_o: fmol {pub: in};
    // Parameters
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_open: per_fmol {pub: in};
    var K_open_int: per_fmol {pub: in};
    var K_Na_i: per_fmol {pub: in};
    var K_Na_o: per_fmol {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: fmol_per_s {pub: in};
    var kappa_3: fmol_per_s {pub: in};
    var kappa_4: fmol_per_s {pub: in};
    var kappa_5: fmol_per_s {pub: in};
    var kappa_6: fmol_per_s {pub: in};
    // Potentials
    var u_1: J_per_mmol;
    var u_2: J_per_mmol;
    var u_3: J_per_mmol;
    var u_4: J_per_mmol;
    var u_open: J_per_mmol;
    var u_open_int: J_per_mmol;
    var u_Na_i: J_per_mmol;
    var u_Na_o: J_per_mmol;
    var u_e_m: volt {pub: in};
    u_1 = RT*ln(K_1*q_1);
    u_2 = RT*ln(K_2*q_2);
    u_3 = RT*ln(K_3*q_3);
    u_4 = RT*ln(K_4*q_4);
    u_open = RT*ln(K_open*q_open);
    u_open_int = RT*ln(K_open_int*q_open_int);
    u_Na_i = RT*ln(K_Na_i*q_Na_i);
    u_Na_o = RT*ln(K_Na_o*q_Na_o);
    //
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    var u_Re_2_f: J_per_mmol;
    var u_Re_2_r: J_per_mmol;
    var u_Re_3_f: J_per_mmol;
    var u_Re_3_r: J_per_mmol;
    var u_Re_4_f: J_per_mmol;
    var u_Re_4_r: J_per_mmol;
    var u_Re_5_f: J_per_mmol;
    var u_Re_5_r: J_per_mmol;
    var u_Re_6_f: J_per_mmol;
    var u_Re_6_r: J_per_mmol;
    u_Re_1_f = u_2;
    u_Re_1_r = u_1;
    u_Re_2_f = u_1+u_Na_o;
    u_Re_2_r = u_3;
    u_Re_3_f = u_3;
    u_Re_3_r = u_4;
    u_Re_4_f = u_4;
    u_Re_4_r = u_2+u_Na_o;
    u_Re_5_f = u_open+u_Na_o;
    u_Re_5_r = u_open_int;
    u_Re_6_f = u_open_int;
    u_Re_6_r = u_open+u_Na_i+zNa*F*u_e_m;
    // flows
    var v_1: fmol_per_s;
    var v_2: fmol_per_s;
    var v_3: fmol_per_s;
    var v_4: fmol_per_s;
    var v_5: fmol_per_s;
    var v_6: fmol_per_s;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    v_2 = kappa_2*(exp(u_Re_2_f/RT)-exp(u_Re_2_r/RT));
    v_3 = kappa_3*(exp(u_Re_3_f/RT)-exp(u_Re_3_r/RT));
    v_4 = kappa_4*(exp(u_Re_4_f/RT)-exp(u_Re_4_r/RT));
    v_5 = kappa_5*(exp(u_Re_5_f/RT)-exp(u_Re_5_r/RT));
    v_6 = kappa_6*(exp(u_Re_6_f/RT)-exp(u_Re_6_r/RT));
    // net fluxes
    var v_q_Na_i: fmol_per_s {pub: out};
    var v_q_Na_o: fmol_per_s {pub: out};
    ode(q_1, t) = v_1-v_2;
    ode(q_2, t) = v_4-v_1;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_open, t) = v_1-v_3+v_6-v_5;
    ode(q_open_int, t) = v_5-v_6;
    // output fluxes
    v_q_Na_i = v_6;
    v_q_Na_o = v_4-v_2-v_5;
  enddef;
  // ###########################################

  def comp AQ as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var RT: J_per_mmol;
    var V_w: L_per_mmol {pub: in};
    RT = R*T;
    // Quantities
    var q_AQ: fmol {pub: in};
    var q_H2O_i: fmol {pub: in};
    var q_H2O_o: fmol {pub: in};
    // Parameters
    var K_AQ: per_fmol {pub: in};
    var K_H2O_i: per_fmol {pub: in};
    var K_H2O_o: per_fmol {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    // Potentials
    var u_AQ: J_per_mmol;
    var u_H2O_i: J_per_mmol;
    var u_H2O_o: J_per_mmol;
    // Hydrostatic pressure would be supplied by boundary conditions
    var u_P_i: kPa {pub: in};
    var u_P_o: kPa {pub: in};
    u_H2O_i = RT*ln(K_H2O_i*q_H2O_i);
    u_H2O_o = RT*ln(K_H2O_o*q_H2O_o);
    u_AQ = RT*ln(K_AQ*q_AQ);
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    u_Re_1_f = u_H2O_o+u_AQ+u_P_o*V_w;
    u_Re_1_r = u_H2O_i+u_AQ+u_P_i*V_w;
    // flows
    var v_1: fmol_per_s;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    // net fluxes
    var v_q_H2O_i: fmol_per_s {pub: out};
    var v_q_H2O_o: fmol_per_s {pub: out};
    v_q_H2O_i = v_1;
    v_q_H2O_o = -v_1;
  enddef;
  // ###########################################

  def comp Kir as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var zK: dimensionless {pub: in};
    var RT: J_per_mmol;
    RT = R*T;
    // Quantities
    var q_Kir: fmol {pub: in};
    var q_K_i: fmol {pub: in};
    var q_K_o: fmol {pub: in};
    // Parameters
    var K_Kir: per_fmol {pub: in};
    var K_K_i: per_fmol {pub: in};
    var K_K_o: per_fmol {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    // Potentials
    var u_Kir: J_per_mmol;
    var u_K_i: J_per_mmol;
    var u_K_o: J_per_mmol;
    var u_e_m: volt {pub: in};
    u_K_i = RT*ln(K_K_i*q_K_i);
    u_K_o = RT*ln(K_K_o*q_K_o);
    u_Kir = RT*ln(K_Kir*q_Kir);
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    u_Re_1_f = u_K_i+u_Kir+zK*F*u_e_m;
    u_Re_1_r = u_K_o+u_Kir;
    // flows
    var v_1: fmol_per_s;
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    // net fluxes
    var v_q_K_i: fmol_per_s {pub: out};
    var v_q_K_o: fmol_per_s {pub: out};
    v_q_K_i = -v_1;
    v_q_K_o = v_1;
  enddef;
  // #########################################################

  def comp NKE as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless;
    z_2 = 1{dimensionless}-z_1;
    RT = R*T;
    var q_Na_o: fmol {pub: in};
    var q_Na_i: fmol {pub: in};
    var q_K_o: fmol {pub: in};
    var q_K_i: fmol {pub: in};
    var q_ATP: fmol {pub: in};
    var q_ADP: fmol {pub: in};
    var q_Pi: fmol {pub: in};
    var u_e: volt {pub: in};
    var e_1: dim;
    var e_2: dim;
    e_1 = exp(z_1*F*u_e/RT);
    e_2 = exp(z_2*F*u_e/RT);
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_5_init: fmol {pub: in};
    var q_6_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var q_5: fmol {init: q_5_init};
    var q_6: fmol {init: q_6_init};
    // Constitutive parameters
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_5: per_fmol {pub: in};
    var K_6: per_fmol {pub: in};
    var K_Ko: per_fmol {pub: in};
    var K_Ki: per_fmol {pub: in};
    var K_ADP: per_fmol {pub: in};
    var K_ATP: per_fmol {pub: in};
    var K_Nao: per_fmol {pub: in};
    var K_Nai: per_fmol {pub: in};
    var K_Pi: per_fmol {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: fmol_per_s {pub: in};
    var kappa_3: fmol_per_s {pub: in};
    var kappa_4: fmol_per_s {pub: in};
    var kappa_5: fmol_per_s {pub: in};
    var kappa_6: fmol_per_s {pub: in};
    //
    var Q_1: dimensionless;
    var Q_2: dimensionless;
    var Q_3: dimensionless;
    var Q_4: dimensionless;
    var Q_5: dimensionless;
    var Q_6: dimensionless;
    var Q_Na_o: dimensionless;
    var Q_Na_i: dimensionless;
    var Q_K_o: dimensionless;
    var Q_K_i: dimensionless;
    var Q_ATP: dimensionless;
    var Q_ADP: dimensionless;
    var Q_Pi: dimensionless;
    Q_1 = K_1*q_1;
    Q_2 = K_2*q_2;
    Q_3 = K_3*q_3;
    Q_4 = K_4*q_4;
    Q_5 = K_5*q_5;
    Q_6 = K_6*q_6;
    Q_Na_o = K_Nao*q_Na_o;
    Q_Na_i = K_Nai*q_Na_i;
    Q_K_o = K_Ko*q_K_o;
    Q_K_i = K_Ki*q_K_i;
    Q_ATP = K_ATP*q_ATP;
    Q_ADP = K_ADP*q_ADP;
    Q_Pi = K_Pi*q_Pi;
    // flows
    var v_1: fmol_per_s;
    var v_2: fmol_per_s;
    var v_3: fmol_per_s;
    var v_4: fmol_per_s;
    var v_5: fmol_per_s;
    var v_6: fmol_per_s;
    v_1 = kappa_1*(Q_1*pow(Q_Na_i, 3{dim})*Q_ATP-Q_2);
    v_2 = kappa_2*(Q_2-Q_3*Q_ADP);
    v_3 = kappa_3*(Q_3-Q_4*pow(Q_Na_o, 3{dim})*e_1);
    v_4 = kappa_4*(Q_4*sqr(Q_K_o)-Q_5);
    v_5 = kappa_5*(Q_5-Q_6*Q_Pi);
    v_6 = kappa_6*(Q_6-Q_1*sqr(Q_K_i)*e_2);
    // conservation equations
    ode(q_1, t) = v_6-v_1;
    ode(q_2, t) = v_1-v_2;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_5, t) = v_4-v_5;
    ode(q_6, t) = v_5-v_6;
    var v_q_Na_i: fmol_per_s {pub: out};
    var v_q_Na_o: fmol_per_s {pub: out};
    var v_q_K_i: fmol_per_s {pub: out};
    var v_q_K_o: fmol_per_s {pub: out};
    v_q_Na_o = v_1;
    v_q_Na_i = v_3;
    v_q_K_o = v_6;
    v_q_K_i = v_4;
  enddef;
  // #########################################################
  // #################### Processes ##########################
  // #########################################################
enddef;
